PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expName, data.getDateStr())
  Experiment info = {}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save psydat file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  blendMode = nofbo
  color = [-0.914, -0.875, -0.749]
  colorSpace = hsv
  expName = stroop_go_nogo_ptbr
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine boas_vindas
    RoutineSettingsComponent boas_vindas
      color = [-0.914, -0.875, -0.749]
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    TextComponent abertura_title
      color = #F8FAFC
      height = 0.052
      letterHeight = 0.052
      pos = [-0.34, 0.20]
      startVal [time (s)] = 0
      text = Tarefa de Correspondência de Cores
      wrapWidth = 0.66
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    TextComponent abertura_body
      color = #CBD5E1
      height = 0.029
      letterHeight = 0.029
      pos = [-0.34, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 0.62
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      text:
        Nesta tarefa, observe o nome e a cor apresentada.

        Pressione ESPAÇO apenas quando a palavra estiver escrita na cor correspondente.
    TextComponent abertura_example_card
      color = #16A34A
      height = 0.086
      letterHeight = 0.086
      pos = [0.34, 0.10]
      startVal [time (s)] = 0
      text = VERDE
      wrapWidth = 0.48
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    TextComponent abertura_example_caption
      color = #CBD5E1
      height = 0.024
      letterHeight = 0.024
      pos = [0.34, -0.02]
      startVal [time (s)] = 0
      text = nome e cor combinando
      wrapWidth = 0.48
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    TextComponent abertura_botao
      color = #38BDF8
      height = 0.030
      letterHeight = 0.030
      pos = [-0.34, -0.25]
      startVal [time (s)] = 0
      text = Iniciar tutorial
      wrapWidth = 0.42
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    TextComponent abertura_hint
      color = #CBD5E1
      height = 0.022
      letterHeight = 0.022
      pos = [-0.34, -0.32]
      startVal [time (s)] = 0
      text = ou pressione ESPAÇO
      wrapWidth = 0.50
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    KeyboardComponent tecla_abertura
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent clique_abertura
      Code Type = Auto->JS
      Begin Routine:
        win.units = 'height'
        nav_mouse = event.Mouse(win=win)
        nav_mouse.clickReset()
      Each Frame:
        if nav_mouse.getPressed()[0] and abertura_botao.contains(nav_mouse):
            continueRoutine = False
    CodeComponent formulario_sessao
      Code Type = Auto->JS
      Begin Experiment:
        from psychopy import gui, core
        from datetime import datetime
        import csv
        import re
        import uuid

        TEST_CODE = 'stroop_go_nogo_ptbr'
        TEST_VERSION = '0.2.2'
        PARTICIPANT_ID_PATTERN = re.compile(r'^[A-Za-z0-9_-]{2,64}$')
        OFFICIAL_CSV_COLUMNS = [
            'project',
            'participant_id',
            'participant_name',
            'initials',
            'visit',
            'evaluator',
            'assessment_id',
            'assessment_date',
            'started_at',
            'test_code',
            'test_version',
            'block',
            'trial_number',
            'word',
            'ink_color',
            'condition',
            'correct_response',
            'key_pressed',
            'reaction_time',
            'correct',
            'error_type',
        ]
        CONDITION_MAP = {
            'congruente': 'congruent',
            'incongruente': 'incongruent',
            'congruent': 'congruent',
            'incongruent': 'incongruent',
        }

        _session_values = {
            'project': '',
            'participant_id': '',
            'participant_name': '',
            'initials': '',
            'visit': '',
            'evaluator': '',
        }
        _session_error = ''

        while True:
            session_dlg = gui.Dlg(
                title='Dados da sessão',
                labelButtonOK='Iniciar tarefa',
                labelButtonCancel='Cancelar',
            )
            session_dlg.addText('Preencha os dados da execução.')
            session_dlg.addText('A data e a hora da avaliação são registradas automaticamente.')
            if _session_error:
                session_dlg.addText(_session_error, color='red')
            session_dlg.addField('Projeto', _session_values['project'])
            session_dlg.addField('ID do participante', _session_values['participant_id'])
            session_dlg.addField('Nome do participante', _session_values['participant_name'])
            session_dlg.addField('Iniciais (opcional)', _session_values['initials'])
            session_dlg.addField('Visita', _session_values['visit'])
            session_dlg.addField('Avaliador(a)', _session_values['evaluator'])
            dlg_values = session_dlg.show()

            if not session_dlg.OK:
                core.quit()

            keys = ['project', 'participant_id', 'participant_name', 'initials', 'visit', 'evaluator']
            labels = ['Projeto', 'ID do participante', 'Nome do participante', 'Iniciais (opcional)', 'Visita', 'Avaliador(a)']
            if isinstance(dlg_values, dict):
                raw_values = {key: dlg_values.get(label, '') for key, label in zip(keys, labels)}
            else:
                if dlg_values is None:
                    dlg_values = getattr(session_dlg, 'data', [])
                raw_values = {key: value for key, value in zip(keys, dlg_values)}
            _session_values = {key: str(raw_values.get(key, '')).strip() for key in keys}
            validation_errors = []

            if not _session_values['project']:
                validation_errors.append('Informe o projeto.')
            if not _session_values['participant_id']:
                validation_errors.append('Informe o ID do participante.')
            elif not PARTICIPANT_ID_PATTERN.match(_session_values['participant_id']):
                validation_errors.append('ID do participante: use 2 a 64 caracteres, apenas letras, números, hífen e sublinhado.')
            if not _session_values['participant_name']:
                validation_errors.append('Informe o nome do participante.')
            elif len(_session_values['participant_name']) < 2 or len(_session_values['participant_name']) > 120:
                validation_errors.append('Nome do participante: use entre 2 e 120 caracteres.')
            if not _session_values['visit']:
                validation_errors.append('Informe a visita.')
            if not _session_values['evaluator']:
                validation_errors.append('Informe o avaliador(a).')

            if not validation_errors:
                break

            _session_error = 'Corrija os campos: ' + ' '.join(validation_errors)

        _started_at = datetime.now().astimezone().replace(microsecond=0)
        expInfo.clear()
        expInfo.update(_session_values)
        expInfo['assessment_id'] = str(uuid.uuid4())
        expInfo['assessment_date'] = _started_at.date().isoformat()
        expInfo['started_at'] = _started_at.isoformat()
        expInfo['test_code'] = TEST_CODE
        expInfo['test_version'] = TEST_VERSION

        _official_participant_id = expInfo['participant_id']
        official_csv_path = os.path.join('data', f'{_official_participant_id}.csv')
        official_trial_rows = []
        official_csv_state = {'written': False}


        def _canonical_text(value):
            if value in [None, 'None']:
                return ''
            return str(value).strip()


        def create_trial_context(block_value, trial_number_value, word_value, ink_color_value, condition_value, correct_response_value):
            try:
                trial_index = int(trial_number_value)
            except Exception as exc:
                raise RuntimeError('trial_number invalido para exportacao oficial.') from exc
            if trial_index < 1:
                raise RuntimeError('trial_number deve ser positivo para exportacao oficial.')

            source_condition = _canonical_text(condition_value).lower()
            canonical_condition = CONDITION_MAP.get(source_condition)
            if canonical_condition is None:
                raise RuntimeError(f'condition invalida para exportacao oficial: {condition_value}')

            expected_response = 'space' if canonical_condition == 'congruent' else ''
            source_response = _canonical_text(correct_response_value)
            if source_response != expected_response:
                raise RuntimeError('correct_response incompativel com condition na tentativa atual.')

            return {
                'block': block_value,
                'trial_number': trial_index,
                'word': _canonical_text(word_value),
                'ink_color': _canonical_text(ink_color_value),
                'condition': canonical_condition,
                'correct_response': expected_response,
            }


        def _extract_keyboard_response(keyboard_component):
            key_pressed_value = ''
            reaction_time_value = ''
            if keyboard_component.keys not in [None, '', []]:
                key_pressed_value = keyboard_component.keys[0] if isinstance(keyboard_component.keys, list) else keyboard_component.keys
                key_pressed_value = _canonical_text(key_pressed_value)
                if key_pressed_value != 'space':
                    raise RuntimeError(f'key_pressed invalido para exportacao oficial: {key_pressed_value}')
                if keyboard_component.rt in [None, '', []]:
                    raise RuntimeError('reaction_time ausente apesar de haver resposta.')
                reaction_time_raw = keyboard_component.rt[0] if isinstance(keyboard_component.rt, list) else keyboard_component.rt
                reaction_time_float = float(reaction_time_raw)
                if reaction_time_float <= 0:
                    raise RuntimeError('reaction_time deve ser maior que zero quando ha resposta.')
                reaction_time_value = f'{reaction_time_float:.6f}'.rstrip('0').rstrip('.')
            return key_pressed_value, reaction_time_value


        def build_trial_record(trial_context, keyboard_component):
            key_pressed_value, reaction_time_value = _extract_keyboard_response(keyboard_component)
            condition_value = trial_context['condition']

            if condition_value == 'congruent' and key_pressed_value == 'space':
                correct_value = '1'
                error_type_value = 'hit'
            elif condition_value == 'congruent':
                correct_value = '0'
                error_type_value = 'omission'
            elif key_pressed_value == 'space':
                correct_value = '0'
                error_type_value = 'commission'
            else:
                correct_value = '1'
                error_type_value = 'correct_rejection'

            row = {
                'project': expInfo['project'],
                'participant_id': expInfo['participant_id'],
                'participant_name': expInfo['participant_name'],
                'initials': expInfo['initials'],
                'visit': expInfo['visit'],
                'evaluator': expInfo['evaluator'],
                'assessment_id': expInfo['assessment_id'],
                'assessment_date': expInfo['assessment_date'],
                'started_at': expInfo['started_at'],
                'test_code': expInfo['test_code'],
                'test_version': expInfo['test_version'],
                'block': trial_context['block'],
                'trial_number': str(trial_context['trial_number']),
                'word': trial_context['word'],
                'ink_color': trial_context['ink_color'],
                'condition': condition_value,
                'correct_response': trial_context['correct_response'],
                'key_pressed': key_pressed_value,
                'reaction_time': reaction_time_value,
                'correct': correct_value,
                'error_type': error_type_value,
            }
            validate_official_trial_row(row)
            return row


        def validate_official_trial_row(row):
            if list(row.keys()) != OFFICIAL_CSV_COLUMNS:
                raise RuntimeError('Colunas oficiais fora da ordem esperada.')
            if row['block'] not in ['practice', 'main']:
                raise RuntimeError('block invalido na exportacao oficial.')
            if row['condition'] not in ['congruent', 'incongruent']:
                raise RuntimeError('condition invalida na exportacao oficial.')
            if row['correct_response'] not in ['', 'space']:
                raise RuntimeError('correct_response invalido na exportacao oficial.')
            if row['key_pressed'] not in ['', 'space']:
                raise RuntimeError('key_pressed invalido na exportacao oficial.')
            if row['correct'] not in ['0', '1']:
                raise RuntimeError('correct invalido na exportacao oficial.')
            if row['error_type'] not in ['hit', 'omission', 'correct_rejection', 'commission']:
                raise RuntimeError('error_type invalido na exportacao oficial.')
            expected_response = 'space' if row['condition'] == 'congruent' else ''
            if row['correct_response'] != expected_response:
                raise RuntimeError('correct_response incoerente com condition.')
            if row['key_pressed'] == 'space' and not row['reaction_time']:
                raise RuntimeError('reaction_time ausente em resposta com Espaco.')
            if row['key_pressed'] == '' and row['reaction_time'] != '':
                raise RuntimeError('reaction_time deve ficar vazio quando nao ha resposta.')
            expected = {
                ('congruent', 'space'): ('1', 'hit'),
                ('congruent', ''): ('0', 'omission'),
                ('incongruent', ''): ('1', 'correct_rejection'),
                ('incongruent', 'space'): ('0', 'commission'),
            }[(row['condition'], row['key_pressed'])]
            if (row['correct'], row['error_type']) != expected:
                raise RuntimeError('correct/error_type incoerentes com condition e key_pressed.')


        def write_official_csv():
            if official_csv_state['written']:
                return
            if not official_trial_rows:
                raise RuntimeError('Nenhuma tentativa registrada para o CSV oficial.')
            os.makedirs('data', exist_ok=True)
            with open(official_csv_path, 'w', newline='', encoding='utf-8') as file_obj:
                writer = csv.DictWriter(file_obj, fieldnames=OFFICIAL_CSV_COLUMNS, extrasaction='raise')
                writer.writeheader()
                for row in official_trial_rows:
                    validate_official_trial_row(row)
                    writer.writerow(row)
            official_csv_state['written'] = True
    CodeComponent nome_csv_oficial
      Code Type = Py
      Begin Experiment:
        official_timestamp = _started_at.strftime('%Y-%m-%d_%Hh%Mm%Ss')
        official_csv_path = os.path.join('data', f'{TEST_CODE}_{official_timestamp}_trials.csv')
  Routine tutorial_regra
    RoutineSettingsComponent tutorial_regra
      color = [-0.914, -0.875, -0.749]
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    TextComponent tutorial_title
      color = #F8FAFC
      height = 0.052
      letterHeight = 0.052
      pos = [0, 0.29]
      startVal [time (s)] = 0
      text = Como responder
      wrapWidth = 1.0
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    TextComponent tutorial_exemplo_go_word
      color = #16A34A
      height = 0.082
      letterHeight = 0.082
      pos = [-0.32, 0.08]
      startVal [time (s)] = 0
      text = VERDE
      wrapWidth = 0.44
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    TextComponent tutorial_exemplo_go_label
      color = #16A34A
      height = 0.030
      letterHeight = 0.030
      pos = [-0.32, -0.09]
      startVal [time (s)] = 0
      wrapWidth = 0.46
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      text:
        RESPONDA
        pressione ESPAÇO
    TextComponent tutorial_exemplo_nogo_word
      color = #2563EB
      height = 0.082
      letterHeight = 0.082
      pos = [0.32, 0.08]
      startVal [time (s)] = 0
      text = VERDE
      wrapWidth = 0.44
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    TextComponent tutorial_exemplo_nogo_label
      color = #DC2626
      height = 0.030
      letterHeight = 0.030
      pos = [0.32, -0.09]
      startVal [time (s)] = 0
      wrapWidth = 0.48
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      text:
        NÃO RESPONDA
        aguarde a próxima tentativa
    TextComponent tutorial_body
      color = #CBD5E1
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.24]
      startVal [time (s)] = 0
      text = Observe a cor das letras e o nome apresentado.
      wrapWidth = 0.95
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    TextComponent tutorial_botao
      color = #38BDF8
      height = 0.030
      letterHeight = 0.030
      pos = [0, -0.34]
      startVal [time (s)] = 0
      text = Continuar
      wrapWidth = 0.38
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    KeyboardComponent tecla_tutorial_regra
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent clique_tutorial_regra
      Code Type = Auto->JS
      Begin Routine:
        win.units = 'height'
        nav_mouse = event.Mouse(win=win)
        nav_mouse.clickReset()
      Each Frame:
        if nav_mouse.getPressed()[0] and tutorial_botao.contains(nav_mouse):
            continueRoutine = False
  Routine pratica_inicio
    RoutineSettingsComponent pratica_inicio
      color = [-0.914, -0.875, -0.749]
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    TextComponent pratica_inicio_title
      color = #F8FAFC
      height = 0.060
      letterHeight = 0.060
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Prática
      wrapWidth = 0.95
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    TextComponent pratica_inicio_body
      color = #CBD5E1
      height = 0.032
      letterHeight = 0.032
      pos = [0, 0.00]
      startVal [time (s)] = 0
      wrapWidth = 0.86
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      text:
        Você fará 4 tentativas de treino.

        Durante a prática, você receberá feedback para entender a regra.
    TextComponent pratica_inicio_botao
      color = #38BDF8
      height = 0.031
      letterHeight = 0.031
      pos = [0, -0.25]
      startVal [time (s)] = 0
      text = Começar prática
      wrapWidth = 0.44
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    TextComponent pratica_inicio_hint
      color = #CBD5E1
      height = 0.021
      letterHeight = 0.021
      pos = [0, -0.32]
      startVal [time (s)] = 0
      text = clique, ESPAÇO ou Enter
      wrapWidth = 0.60
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    KeyboardComponent tecla_pratica_inicio
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent clique_pratica_inicio
      Code Type = Auto->JS
      Begin Routine:
        win.units = 'height'
        nav_mouse = event.Mouse(win=win)
        nav_mouse.clickReset()
      Each Frame:
        if nav_mouse.getPressed()[0] and pratica_inicio_botao.contains(nav_mouse):
            continueRoutine = False
  Routine regra_rapida
    RoutineSettingsComponent regra_rapida
      color = [-0.914, -0.875, -0.749]
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    TextComponent regra_rapida_texto
      color = #F8FAFC
      height = 0.042
      letterHeight = 0.042
      pos = [0, 0.04]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = PRESSIONE ESPAÇO APENAS QUANDO A PALAVRA E A COR COMBINAREM.
      wrapWidth = 1.15
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    TextComponent regra_rapida_secundario
      color = #CBD5E1
      height = 0.027
      letterHeight = 0.027
      pos = [0, -0.09]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Observe a cor das letras.
      wrapWidth = 0.80
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  Routine contagem
    RoutineSettingsComponent contagem
      color = [-0.914, -0.875, -0.749]
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    TextComponent contagem_texto
      color = #F8FAFC
      height = 0.09
      letterHeight = 0.09
      pos = [0, 0.02]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.55
      text [set every repeat] = $countdown_text
      wrapWidth = 1.0
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    TextComponent contagem_hint
      color = #CBD5E1
      height = 0.03
      letterHeight = 0.03
      pos = [0, -0.18]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.55
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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  Routine trial_pratica
    RoutineSettingsComponent trial_pratica
      color = [-0.914, -0.875, -0.749]
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    CodeComponent codigo_pratica
      Code Type = Auto->JS
      Before Experiment:
        from psychopy import event, core
        trial_clock = core.Clock()
        hud_state = {
            'practice_completed': 0,
            'practice_correct_count': 0,
            'main_completed': 0,
            'main_correct_count': 0,
            'main_timer_started': False,
        }
        main_timer_clock = core.Clock()
        MAIN_TRIAL_DURATION = 3.75
        MAIN_TOTAL_TRIALS = 16


        def format_accuracy(completed, correct_count):
            if completed == 0:
                return 'Precisão: —'
            return f'Precisão: {round((correct_count / completed) * 100):02d}%'


        def format_accuracy_bar(completed, correct_count):
            if completed == 0:
                filled = 0
            else:
                filled = round((correct_count / completed) * 10)
            return '[' + ('#' * filled) + ('-' * (10 - filled)) + ']'


        def format_main_time():
            if not hud_state['main_timer_started']:
                return 'Tempo: 00:00'
            elapsed = min(main_timer_clock.getTime(), MAIN_TRIAL_DURATION * MAIN_TOTAL_TRIALS)
            minutes = int(elapsed // 60)
            seconds = int(elapsed % 60)
            return f'Tempo: {minutes:02d}:{seconds:02d}'

        practice_accuracy_text = format_accuracy(hud_state['practice_completed'], hud_state['practice_correct_count'])
        practice_accuracy_bar = format_accuracy_bar(hud_state['practice_completed'], hud_state['practice_correct_count'])
        main_accuracy_text = format_accuracy(hud_state['main_completed'], hud_state['main_correct_count'])
        main_accuracy_bar = format_accuracy_bar(hud_state['main_completed'], hud_state['main_correct_count'])
        timer_text = format_main_time()
      Begin Routine:
        event.clearEvents(eventType='keyboard')
        key_pressed = ''
        reaction_time = ''
        correct = 0
        error_type = ''
        feedback_text = ''
        block = 'practice'
        practice_accuracy_text = format_accuracy(hud_state['practice_completed'], hud_state['practice_correct_count'])
        practice_accuracy_bar = format_accuracy_bar(hud_state['practice_completed'], hud_state['practice_correct_count'])
        _current_trial_context = create_trial_context(
            block,
            pratica_loop.thisN + 1,
            word,
            ink_color,
            condition,
            correct_response,
        )
      End Routine:
        trial_record = build_trial_record(_current_trial_context, resp_pratica)
        key_pressed = trial_record['key_pressed']
        reaction_time = trial_record['reaction_time']
        correct = int(trial_record['correct'])
        error_type = trial_record['error_type']
        if error_type in ['hit', 'correct_rejection']:
            feedback_text = '✓ Correto'
        elif error_type == 'omission':
            feedback_text = 'Pressione ESPAÇO quando a cor combina'
        else:
            feedback_text = 'Não responda quando a cor não combina'
        hud_state['practice_completed'] += 1
        hud_state['practice_correct_count'] += correct
        practice_accuracy_text = format_accuracy(hud_state['practice_completed'], hud_state['practice_correct_count'])
        practice_accuracy_bar = format_accuracy_bar(hud_state['practice_completed'], hud_state['practice_correct_count'])
    CodeComponent renderizacao_cores_pratica
      Code Type = Py
      Before Experiment:
        INK_COLOR_DISPLAY_MAP = {
            'green': '#40FF00',
            'yellow': '#FFF200',
            'pink': '#FF5CCB',
            'black': '#000000',
            'red': '#FF0000',
            'orange': '#FF9000',
            'brown': '#965000',
            'purple': '#9A24FF',
            'blue': '#0062FF',
            'gray': '#808080',
        }
      Begin Routine:
        stim_pratica.alignText = 'center'
        stim_pratica.anchorHoriz = 'center'
        stim_pratica.anchorVert = 'center'
    TextComponent hud_pratica_precisao
      color = #CBD5E1
      height = 0.024
      letterHeight = 0.024
      pos = [-0.42, 0.36]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.8
      text [set every repeat] = $practice_accuracy_text
      wrapWidth = 0.38
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    TextComponent hud_pratica_barra
      color = #38BDF8
      height = 0.022
      letterHeight = 0.022
      pos = [-0.42, 0.31]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.8
      text [set every repeat] = $practice_accuracy_bar
      wrapWidth = 0.38
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    TextComponent hud_pratica_tempo
      color = #CBD5E1
      height = 0.024
      letterHeight = 0.024
      pos = [0.42, 0.36]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.8
      text = Tempo: --:--
      wrapWidth = 0.38
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    KeyboardComponent resp_pratica
      allowedKeys = 'space'
      correctAns [set every repeat] = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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    TextComponent fix_pratica
      color = #CBD5E1
      height = 0.06
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text = +
      wrapWidth = 0.4
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    TextComponent stim_card_pratica
      height = 0.060
      letterHeight = 0.060
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.0
      wrapWidth = 0.82
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      text:
        ████████████████
        ████████████████
        ████████████████
    TextComponent stim_pratica
      color [set every repeat] = $INK_COLOR_DISPLAY_MAP[ink_color]
      height = 0.13
      letterHeight = 0.13
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
      wrapWidth = 0.55
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    TextComponent lembrete_pratica
      color = #CBD5E1
      height = 0.028
      letterHeight = 0.028
      pos = [0, -0.20]
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.0
      text = ESPAÇO apenas quando combinar
      wrapWidth = 1.0
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    TextComponent hold_pratica
      color = #0B1020
      height = 0.001
      letterHeight = 0.001
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.8
      text = .
      wrapWidth = 0.1
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  Routine feedback_pratica
    RoutineSettingsComponent feedback_pratica
      color = [-0.914, -0.875, -0.749]
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    TextComponent texto_feedback
      color = #F8FAFC
      height = 0.052
      letterHeight = 0.052
      pos = [0, 0.02]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_text
      wrapWidth = 1.15
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  Routine resumo_pratica
    RoutineSettingsComponent resumo_pratica
      color = [-0.914, -0.875, -0.749]
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    TextComponent resumo_pratica_title
      color = #F8FAFC
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Prática concluída
      wrapWidth = 1.25
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    TextComponent resumo_pratica_body
      color = #CBD5E1
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      wrapWidth = 1.18
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      text:
        Agora começa a tarefa principal.
        A regra continua a mesma e não haverá feedback.
    TextComponent resumo_pratica_key
      color = #38BDF8
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent resumo_pratica_hint
      color = #CBD5E1
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_resumo_pratica
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial_principal
    RoutineSettingsComponent trial_principal
      color = [-0.914, -0.875, -0.749]
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    CodeComponent codigo_principal
      Code Type = Auto->JS
      Begin Routine:
        event.clearEvents(eventType='keyboard')
        key_pressed = ''
        reaction_time = ''
        correct = 0
        error_type = ''
        block = 'main'
        if not hud_state['main_timer_started']:
            main_timer_clock.reset()
            hud_state['main_timer_started'] = True
        try:
            total_main_trials = len(principal_loop.trialList)
            current_main_trial = principal_loop.thisN + 1
        except Exception:
            total_main_trials = '?'
            current_main_trial = '?'
        progress_text = f'Bloco principal - tentativa {current_main_trial} de {total_main_trials}'
        main_accuracy_text = format_accuracy(hud_state['main_completed'], hud_state['main_correct_count'])
        main_accuracy_bar = format_accuracy_bar(hud_state['main_completed'], hud_state['main_correct_count'])
        timer_text = format_main_time()
        _current_trial_context = create_trial_context(
            block,
            current_main_trial,
            word,
            ink_color,
            condition,
            correct_response,
        )
      Each Frame:
        timer_text = format_main_time()
      End Routine:
        trial_record = build_trial_record(_current_trial_context, resp_principal)
        key_pressed = trial_record['key_pressed']
        reaction_time = trial_record['reaction_time']
        correct = int(trial_record['correct'])
        error_type = trial_record['error_type']
        official_trial_rows.append(trial_record)
        hud_state['main_completed'] += 1
        hud_state['main_correct_count'] += correct
        main_accuracy_text = format_accuracy(hud_state['main_completed'], hud_state['main_correct_count'])
        main_accuracy_bar = format_accuracy_bar(hud_state['main_completed'], hud_state['main_correct_count'])
        timer_text = format_main_time()
    CodeComponent renderizacao_cores_principal
      Code Type = Py
      Begin Routine:
        stim_principal.alignText = 'center'
        stim_principal.anchorHoriz = 'center'
        stim_principal.anchorVert = 'center'
    TextComponent hud_principal_precisao
      color = #CBD5E1
      height = 0.024
      letterHeight = 0.024
      pos = [-0.42, 0.36]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.75
      text [set every repeat] = $main_accuracy_text
      wrapWidth = 0.38
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    TextComponent hud_principal_barra
      color = #38BDF8
      height = 0.022
      letterHeight = 0.022
      pos = [-0.42, 0.31]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.75
      text [set every repeat] = $main_accuracy_bar
      wrapWidth = 0.38
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    TextComponent hud_principal_tempo
      color = #CBD5E1
      height = 0.024
      letterHeight = 0.024
      pos = [0.42, 0.36]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.75
      text [set every frame] = $timer_text
      wrapWidth = 0.38
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    KeyboardComponent resp_principal
      allowedKeys = 'space'
      correctAns [set every repeat] = $correct_response
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    TextComponent progresso_principal
      color = #CBD5E1
      height = 0.026
      letterHeight = 0.026
      pos = [0, 0.35]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.75
      text [set every repeat] = $progress_text
      wrapWidth = 1.2
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    TextComponent fix_principal
      color = #CBD5E1
      height = 0.06
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text = +
      wrapWidth = 0.4
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    TextComponent stim_card_principal
      height = 0.060
      letterHeight = 0.060
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.5
      wrapWidth = 0.82
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      text:
        ████████████████
        ████████████████
        ████████████████
    TextComponent stim_principal
      color [set every repeat] = $INK_COLOR_DISPLAY_MAP[ink_color]
      height = 0.13
      letterHeight = 0.13
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $word
      wrapWidth = 0.55
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    TextComponent lembrete_principal
      color = #CBD5E1
      disabled = True
      height = 0.028
      letterHeight = 0.028
      pos = [0, -0.20]
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.5
      wrapWidth = 1.0
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    TextComponent hold_principal
      color = #0B1020
      height = 0.001
      letterHeight = 0.001
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.75
      text = .
      wrapWidth = 0.1
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  Routine resultados
    RoutineSettingsComponent resultados
      color = [-0.914, -0.875, -0.749]
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    KeyboardComponent tecla_resultados
      allowedKeys = 'space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent codigo_resultados
      Code Type = Py
      Begin Routine:
        resultados_mouse = event.Mouse(win=win)
        resultados_mouse.clickReset()

        main_result_rows = [row for row in official_trial_rows if row['block'] == 'main']
        total_main_trials = len(main_result_rows)
        hits = sum(1 for row in main_result_rows if row['error_type'] == 'hit')
        omissions = sum(1 for row in main_result_rows if row['error_type'] == 'omission')
        correct_rejections = sum(1 for row in main_result_rows if row['error_type'] == 'correct_rejection')
        commissions = sum(1 for row in main_result_rows if row['error_type'] == 'commission')
        if total_main_trials:
            resultados_precisao_percentual = round(((hits + correct_rejections) / total_main_trials) * 100)
        else:
            resultados_precisao_percentual = 0

        hit_reaction_times = [
            float(row['reaction_time'])
            for row in main_result_rows
            if row['error_type'] == 'hit' and row['reaction_time']
        ]
        if hit_reaction_times:
            hit_reaction_times = sorted(hit_reaction_times)
            midpoint = len(hit_reaction_times) // 2
            if len(hit_reaction_times) % 2:
                median_reaction_time = hit_reaction_times[midpoint]
            else:
                median_reaction_time = (hit_reaction_times[midpoint - 1] + hit_reaction_times[midpoint]) / 2
            resultados_rt_mediana = f'{median_reaction_time:.3f} s'
        else:
            resultados_rt_mediana = '—'

        def resultados_text(text, pos, height, color, wrap_width=0.9):
            return visual.TextStim(
                win=win,
                text=text,
                units='height',
                pos=pos,
                height=height,
                color=color,
                colorSpace='rgb',
                font='Arial',
                wrapWidth=wrap_width,
                alignText='center',
                anchorHoriz='center',
                anchorVert='center',
            )

        resultados_painel = visual.Rect(win=win, units='height', pos=(0, 0), size=(1.18, 0.78), fillColor='#F8FAFC', lineColor='#E2E8F0', lineWidth=2)
        resultados_circulo_fundo = visual.Circle(win=win, units='height', pos=(0, 0.12), radius=0.135, fillColor=None, lineColor='#CBD5E1', lineWidth=9)
        resultados_circulo_destaque = visual.Circle(win=win, units='height', pos=(0, 0.12), radius=0.117, fillColor=None, lineColor='#2563EB', lineWidth=4)
        resultados_botao_area = visual.Rect(win=win, units='height', pos=(0, -0.295), size=(0.34, 0.072), fillColor='#0F172A', lineColor='#0F172A', lineWidth=1)

        resultados_title = resultados_text('Resumo da execução', (0, 0.315), 0.043, '#0F172A')
        resultados_subtitle = resultados_text('Dados descritivos desta execução da tarefa.', (0, 0.265), 0.024, '#475569')
        resultados_percent = resultados_text(f'{resultados_precisao_percentual}%', (0, 0.13), 0.063, '#0F172A', 0.38)
        resultados_percent_label = resultados_text('precisão total', (0, 0.055), 0.020, '#475569', 0.36)
        resultados_rt_label = resultados_text('Tempo de reação', (0, -0.055), 0.025, '#0F172A')
        resultados_rt_value = resultados_text(resultados_rt_mediana, (0, -0.095), 0.032, '#2563EB')
        resultados_counts = resultados_text(f'Hits: {hits}    Omissões: {omissions}    Rejeições corretas: {correct_rejections}    Comissões: {commissions}', (0, -0.165), 0.023, '#0F172A', 1.02)
        resultados_notice = resultados_text('Este resumo descreve apenas esta execução e não representa diagnóstico ou avaliação clínica.', (0, -0.225), 0.020, '#475569', 0.92)
        resultados_botao_texto = resultados_text('Finalizar', (0, -0.295), 0.026, '#F8FAFC', 0.32)
      Each Frame:
        if resultados_mouse.getPressed()[0] and resultados_botao_area.contains(resultados_mouse):
            continueRoutine = False

        for resultados_stim in [
            resultados_painel,
            resultados_circulo_fundo,
            resultados_circulo_destaque,
            resultados_title,
            resultados_subtitle,
            resultados_percent,
            resultados_percent_label,
            resultados_rt_label,
            resultados_rt_value,
            resultados_counts,
            resultados_notice,
            resultados_botao_area,
            resultados_botao_texto,
        ]:
            resultados_stim.draw()
      End Routine:
        write_official_csv()
  Routine fim
    RoutineSettingsComponent fim
      color = [-0.914, -0.875, -0.749]
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    TextComponent fim_title
      color = #F8FAFC
      height = 0.062
      letterHeight = 0.062
      pos = [0, 0.18]
      startVal [time (s)] = 0
      text = Teste concluído.
      wrapWidth = 1.25
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    TextComponent fim_body
      color = #CBD5E1
      height = 0.036
      letterHeight = 0.036
      pos = [0, 0.02]
      startVal [time (s)] = 0
      text = Obrigado pela participação.
      wrapWidth = 1.18
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    TextComponent fim_key
      color = #38BDF8
      height = 0.034
      letterHeight = 0.034
      pos = [0, -0.31]
      startVal [time (s)] = 0
      text = [ ESPAÇO ]
      wrapWidth = 0.7
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    TextComponent fim_hint
      color = #CBD5E1
      height = 0.026
      letterHeight = 0.026
      pos = [0, -0.37]
      startVal [time (s)] = 0
      text = Pressione ESPAÇO para continuar
      wrapWidth = 1.0
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    KeyboardComponent tecla_fim
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent salvar_csv_unificado
      Code Type = Auto->JS
      End Routine:
        write_official_csv()
Flow
  Routine boas_vindas
  Routine tutorial_regra
  Routine pratica_inicio
  Routine regra_rapida
  LoopInitiator contagem_pratica_loop loopType="TrialHandler"
    conditions = condicoes/contagem_regressiva.csv
    conditionsFile = condicoes/contagem_regressiva.csv
    isTrials = False
    loopType = sequential
    method = sequential
    nReps = 1
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    Routine contagem
  LoopTerminator contagem_pratica_loop
  LoopInitiator pratica_loop loopType="TrialHandler"
    conditions = condicoes/pratica_stroop_go_nogo_ptbr.csv
    conditionsFile = condicoes/pratica_stroop_go_nogo_ptbr.csv
    isTrials = False
    loopType = random
    method = random
    nReps = 1
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    Routine trial_pratica
    Routine feedback_pratica
  LoopTerminator pratica_loop
  Routine resumo_pratica
  LoopInitiator contagem_principal_loop loopType="TrialHandler"
    conditions = condicoes/contagem_regressiva.csv
    conditionsFile = condicoes/contagem_regressiva.csv
    isTrials = False
    loopType = sequential
    method = sequential
    nReps = 1
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    Routine contagem
  LoopTerminator contagem_principal_loop
  LoopInitiator principal_loop loopType="TrialHandler"
    conditions = condicoes/bloco_principal_stroop_go_nogo_ptbr.csv
    conditionsFile = condicoes/bloco_principal_stroop_go_nogo_ptbr.csv
    isTrials = False
    loopType = random
    method = random
    nReps = 1
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    Routine trial_principal
  LoopTerminator principal_loop
  Routine resultados
